[[model]]
name: Kemp model
author: Frankie Patten-Elliott
# Initial values
ikr.C1 = 1.0
ikr.C2 = 0.0
ikr.C3 = 0.0
ikr.O = 0.0
ikr.I = 0.0
ikr.ID = 0
ikr.OD = 0
ikr.C1D = 0
ikr.C2D = 0
ikr.C3D = 0

[ikr]
use physical_constants.R, physical_constants.T, physical_constants.F
IKr = gkr * O * (membrane.V - nernst.EK)
    in [pA]
    oxmeta: membrane_rapid_delayed_rectifier_potassium_current

a_a0 = a_12 * exp(z_12 * membrane.V / (R*T/F))
a_a1 = a_3O * exp(z_3O * membrane.V / (R*T/F))
a_i = a_OI * exp(z_OI * membrane.V / (R*T/F))
a_ci = a_3I * exp(z_3I * membrane.V / (R*T/F))

b_a0 = b_21 * exp(-z_21 * membrane.V / (R*T/F))
b_a1 = b_O3 * exp(-z_O3 * membrane.V / (R*T/F))
b_i = b_IO * exp(-z_IO * membrane.V / (R*T/F))
b_ci = b_I3 * exp(-z_I3 * membrane.V / (R*T/F))

kf = 0.1235
kb = 0.1911

a_12 = 0.1161
a_3O = 0.0578
a_OI = 0.2533
a_3I = 0.52e-4

b_21 = 0.2442
b_O3 = 0.349e-3
b_IO = 0.0522
b_I3 = 0.85e-8

z_12 = 0.2990
z_3O = 0.9710
z_OI = 0.5953
z_3I = 1.525

z_21 = 1.604
z_O3 = 1.062
z_IO = 0.8209
z_I3 = 1.842

gkr = 33.3 [nS]
    in [nS]
    oxmeta: membrane_rapid_delayed_rectifier_potassium_current_conductance

dot(C1) = -a_a0 * C1 + b_a0 * C2
    in [1]
dot(C2) = a_a0 * C1 - b_a0 * C2 - kf * C2 + kb * C3
    in [1]
dot(C3) = kf * C2 - kb * C3 - a_a1 * C3 + b_a1 * O - a_ci * C3 + b_ci * I
    in [1]
dot(O) = a_a1 * C3 - b_a1 * O - a_i * O + b_i * I - (kon_o * (D ^ hill) * O - koff_o * OD)
    in [1]
dot(I) = a_i * O - b_i * I + a_ci * C3 - b_ci * I - (kon_i * (D ^ hill) * I - koff_i * ID)
    in [1]

D = 0
    in [nM]

kon_o = 1e-4 [1/ms]
    in [1/ms]
koff_o = 1e-4 [1/ms]
    in [1/ms]
kon_i = 1e-3 [1/ms]
    in [1/ms]
koff_i = kon_i * koff_o / kon_o
    in [1/ms]
hill = 1 [1]
    in [1]
k2f = 1e-2 [1/ms]
    in [1/ms]

dot(ID) = a_i * OD - b_i * ID + a_ci * C3D - b_ci * k2f * ID + (kon_i * (D ^ hill) * I - koff_i * ID)
    in [1]
dot(OD) = a_a1 * C3D - b_a1 * k2f * OD - a_i * OD + b_i * ID + (kon_o * (D ^ hill) * O - koff_o * OD)
    in [1]
dot(C1D) = -a_a0 * C1D + b_a0 * C2D
    in [1]
dot(C2D) = a_a0 * C1D - b_a0 * C2D - kf * C2D + kb * C3D
    in [1]
dot(C3D) = kf * C2D - kb * C3D - a_a1 * C3D + b_a1 * k2f * OD - a_ci * C3D + b_ci * k2f * ID
    in [1]

[engine]
time = 0 bind time
    in [ms]
pace = 0 bind pace

[membrane]
V = engine.pace
    desc: membrane potential
    in [mV]

[extracellular]
ko = 5.4 [mM]
    in [mM]
    oxmeta: extracellular_potassium_concentration
    label K_o

[intracellular]
ki = 130 [mM]
    in [mM]
    oxmeta: intracellular_potassium_concentration
    label K_i

[physical_constants]
F = 96485 [C/mol]
    in [C/mol]
R = 8314 [J/mol/K]
    in [J/mol/K]
T = 310 [K]
    in [K]

[nernst]
EK = physical_constants.R * physical_constants.T / physical_constants.F * log(extracellular.ko / intracellular.ki)
    in [mV]
    oxmeta: potassium_reversal_potential
