[[model]]
author: Chon Lok Lei
name: Lei_2019_37C_IKr_Model11
# Initial values
ikr.O = 0
ikr.I = 0
ikr.CI = 0
ikr.OD = 0
ikr.ID = 0
ikr.iOD = 0
ikr.iID = 0
ikr.C = 1
#ikr.D = 0

[ikr]
use membrane.V

IKr = p9 * O * (V - nernst.EK)
    in [nA]
    oxmeta: membrane_rapid_delayed_rectifier_potassium_current

k1 = p1 * exp(p2 * V)
k2 = p3 * exp(-p4 * V)
k3 = p5 * exp(p6 * V)
k4 = p7 * exp(-p8 * V)

p1 = exp(-77.6045 + 0.2575 * physical_constants.T)/1000  #0.000388 [mS/uF]
    in [mS/uF]
p2 = (413.1985 - 1.1844 * physical_constants.T)/1000  #0.060653 [1/mV]
    in [1/mV]
p3 = exp(-9.3825 + 0.018 * physical_constants.T)/1000  #0.000018 [mS/uF]
    in [mS/uF]
p4 = (-326.2203 + 1.257 * physical_constants.T)/1000  #0.047931 [1/mV]
    in [1/mV]
p5 = exp(-28.9915 + 0.1127 * physical_constants.T)/1000  #0.096048 [mS/uF]
    in [mS/uF]
p6 = (-43.1341 + 0.2377 * physical_constants.T)/1000  #0.027623 [1/mV]
    in [1/mV]
p7 = exp(-39.8543 + 0.1408 * physical_constants.T)/1000  #0.007729 [mS/uF]
    in [mS/uF]
p8 = (128.534 - 0.3384 * physical_constants.T)/1000  #0.027816 [1/mV]
    in [1/mV]
p9 = 0.070404964 [uS]
    in [uS]
    oxmeta: membrane_rapid_delayed_rectifier_potassium_current_conductance

dot(O) = koff * iOD + k1 * C + k4 * I - (k2 + k3 + kon * (D ^ hill)) * O
dot(I) = koff * iID + k1 * CI + k3 * O - (k2 + k4 + kon * (D ^ hill)) * I
dot(CI) = k2 * I + k3 * C - (k1 + k4) * CI
dot(iOD) = kon * (D ^ hill) * O + ku * OD - (koff + kt) * iOD
dot(iID) = kon * (D ^ hill) * I + ku * ID - (koff + kt) * iID
dot(OD) = kt * iOD - ku * OD
dot(ID) = kt * iID - ku * ID
dot(C) = - k3 * C + k4 * CI - k1 * C + k2 * O
#C = 1 - O - I - CI - OD - ID - iOD - iID

#dot(D) = 0
D = 0
    in [nM]

kon = 1e-5
koff = 1e-5

ku = 1e-9
kt = 1e-9

hill = 1


[engine]
time = 0 bind time
    in [ms]
pace = 0 bind pace

[membrane]
V = engine.pace
    desc: membrane potential
    in [mV]

[extracellular]
ko = 4 [mM]
    in [mM]
    oxmeta: extracellular_potassium_concentration
    label K_o

[intracellular]
ki = 140 [mM]
    in [mM]
    oxmeta: intracellular_potassium_concentration
    label K_i

[physical_constants]
F = 96485 [C/mol]
    in [C/mol]
R = 8314 [mJ/mol/K]
    in [mJ/mol/K]
T = 298.15 [K]
    in [K]

[nernst]
EK = physical_constants.R * physical_constants.T / physical_constants.F * log(extracellular.ko / intracellular.ki)
    in [mV]
    oxmeta: potassium_reversal_potential
